PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['exp_id'], expName, expInfo['date'])
  Experiment info = {'session': '1', 'exp_id': '', 'age': '', 'sex(M or F)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Social Reinforcement Learning
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Routines
  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # store it in the data:
        thisExp.addData('reward_a', p_reward['a'])
        thisExp.addData('reward_d', p_reward['d'])
        if trial_type == "Private":
            if key_resp.keys[0] == 'a':
                reward = str(reward_a.get_reward())
            else:
                reward = str(reward_d.get_reward())
        else:
            reward = "?"

        thisExp.addData('reward', reward)
    ImageComponent image
      image [set every frame] = $image_path
      pos [set every repeat] = (x_image, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_3
      color = black
      letterHeight = 0.075
      pos [set every repeat] = (x_image, -0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $"Rew:" + reward
    PolygonComponent line_2
      fillColor = black
      lineColor = black
      lineWidth = 2
      ori = 90
      shape = line
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_6
      color = black
      letterHeight = 0.075
      pos [set every repeat] = (x_image, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $identity
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  Routine Start
    TextboxComponent textbox
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0, 0.35)
      size = (1.75,0.3)
      startVal [frame N] = 0.0
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      text:
        Hi. Thanks for participating in this experiment.
        In this experiment, there is 2 kind of trials: Observational, and Private. In Observational trial, an abstract picture of the demonstrator is shown on the left side of the screen and then you can see that the domonstrator's action but not reward. In private trials,an abstract picture of You is shown on the right side of the screen and then you should choose between action a or d with pressing the "a" or "d" button on the keyboard after seeing "Go!" signal. Therefore you can see the reward correspond to your action. The goal of experiment is to get more rewards.
        The more rewards you get, you earn more money(actually I'll pay to you after creating my owncrypto token. My pleasure :D )
        It can take your time for about 10 mins(100 trials)
        Whenever you read the description, you can press the "f" to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'enter','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Private_Observational_trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from random import randint,sample,choice,choices
        trial = 0

        #block_types = ["Social", "Private"]
        #learning_types = ["PL","SD","UD"]
        #trial_types = ["Observational","Private"]
        def create_trials(state):
            x = ["Observational","Private"] * 20
            if state == 1:
                block_type = ["Private"] * 20 + ["Social"] * 80
                learning_type = ["PL"] * 20 + ["UD"] * 40 + ["SD"] * 40
                trials_type = ["Private"] * 20 + sample(x, k=len(x)) + sample(x, k=len(x))
            if state == 2:
                block_type = ["Private"] * 20 + ["Social"] * 80
                learning_type = ["PL"] * 20 + ["SD"] * 40 + ["UD"] * 40
                trials_type = ["Private"] * 20 + sample(x, k=len(x)) + sample(x, k=len(x))
            if state == 3:
                block_type = ["Social"] * 40 + ["Private"] * 20 + ["Social"] * 40
                learning_type = ["UD"] * 40 + ["PL"] * 20 + ["SD"] * 40
                trials_type = sample(x, k=len(x)) + ["Private"] * 20 + sample(x, k=len(x))
            if state == 4:
                block_type = ["Social"] * 40 + ["Private"] * 20 + ["Social"] * 40
                learning_type = ["SD"] * 40 + ["PL"] * 20 + ["UD"] * 40
                trials_type = sample(x, k=len(x)) + ["Private"] * 20 + sample(x, k=len(x))
            if state == 5:
                block_type =   ["Social"] * 80 + ["Private"] * 20
                learning_type = ["UD"] * 40 + ["SD"] * 40 + ["PL"] * 20
                trials_type = sample(x, k=len(x)) + sample(x, k=len(x)) + ["Private"] * 20
            if state == 6:
                block_type =   ["Social"] * 80 + ["Private"] * 20
                learning_type = ["SD"] * 40 + ["UD"] + ["PL"] * 20
                trials_type = sample(x, k=len(x)) + sample(x, k=len(x)) + ["Private"] * 20
            return block_type , learning_type, trials_type
        # There is 6 states in each session:
        # State 1: P, UD , SD
        # State 2: P, SD , UD
        # State 3: UD , P, SD
        # State 4: SD , P, UD
        # State 5: UD, SD , P
        # State 6: SD, UD , P
        state = randint(1,6)
        block_type, learning_type, trials_type = create_trials(state)

        actions = ['a', 'd']
        rewards = [1,-1]
        p1 = 0.7
        p2 = 0.3
        p_reward= {'a' : choice([p1,p2])}
        p_reward['d'] = 1 - p_reward['a']
        probs_a = [p_reward['a'],1 - p_reward['a']]
        probs_d = [p_reward['d'],1 - p_reward['d']]
        if p_reward['a'] > p_reward['d']:
            best_action = 'a'
            worst_action = 'd'
        else :
            best_action = 'd'
            worst_action = 'a'
        class MultinomialReward():
            def __init__(self, rewards, probs):
                self.rewards = rewards
                self.probs = probs

            def get_reward(self):
                return choices(self.rewards, weights = self.probs, k = 1)[0]

        reward_a = MultinomialReward(rewards,probs_a)
        reward_d = MultinomialReward(rewards,probs_d)
      Begin Routine:
        trial = trial + 1
        blc_type = block_type[trial-1]
        lrn_type = learning_type[trial-1]
        trial_type = trials_type[trial-1]
        image_paths = ["images/Observational_trial.png","images/Private_trial.png"]
        image_path = "images/" + trial_type + "_trial.png"
        if trial_type == "Observational":
            x_image = -0.5
            identity = "Demonstrator"
        else :
            x_image = 0.5
            identity = "You"

        action = 'NA'
        if trial_type == "Observational":
            if lrn_type == "SD":
                action = choices([best_action, worst_action], weights = [0.8,0.2], k = 1)[0]
            elif lrn_type == "UD":
                action = choices([best_action, worst_action], weights = [0.2,0.8], k = 1)[0]
        # store in the data:
        thisExp.addData('block_type', blc_type)
        thisExp.addData('learning_type', lrn_type)
        thisExp.addData('trial_type', trial_type)
        thisExp.addData('image_path', image_path)
        thisExp.addData('x_image', x_image)
        thisExp.addData('trial', trial)
    ImageComponent person
      image [set every repeat] = $image_path
      pos [set every repeat] = (x_image, 0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    TextComponent text
      color = black
      letterHeight = 0.075
      pos [set every repeat] = (x_image, -0.2)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.25
      text = A  or  D
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    TextComponent text_2
      color = black
      letterHeight = 0.075
      pos [set every repeat] = (x_image,-0.3)
      startVal [time (s)] = 2.25
      stopVal [duration (s)] = 0.5
      text = GO!
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    KeyboardComponent key_resp
      allowedKeys = 'a','d'
      forceEndRoutine = True
      startVal [time (s)] = 2.75
      store = first key
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    TextComponent text_4
      color = black
      letterHeight = 0.075
      pos [set every repeat] = (x_image, -0.2)
      startVal [time (s)] = 3.25
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $"action: " + str(action)
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    PolygonComponent line
      fillColor = black
      lineColor = black
      lineWidth = 2
      ori = 90
      shape = line
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.075
      pos [set every repeat] = (x_image, 0.4)
      startVal [time (s)] = 0.5
      text [set every repeat] = $identity
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Flow
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine Private_Observational_trial
    Routine feedback
  LoopTerminator trials
